PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[0,0,0]
  colorSpace = hsv
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = strooptest
  Screen = 1
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Routines
  Routine trial
    TextComponent target
      colorSpace = hsv
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1.7
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instrText
      colorSpace = hsv
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember you choose the color of the letters, ignoring the word:

        red -> left
        blue -> right
        green -> down
        yellow -> up
    KeyboardComponent key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'colour': u'red', 'word': u'RED', 'congruent': 1, 'corrAns': u'left'},
      {'colour': u'green', 'word': u'RED', 'congruent': 0, 'corrAns': u'down'},
      {'colour': u'yellow', 'word': u'RED', 'congruent': 0, 'corrAns': u'up'},
      {'colour': u'blue', 'word': u'RED', 'congruent': 0, 'corrAns': u'right'},
      {'colour': u'green', 'word': u'BLUE', 'congruent': 0, 'corrAns': u'down'},
      {'colour': u'red', 'word': u'BLUE', 'congruent': 0, 'corrAns': u'left'},
      {'colour': u'blue', 'word': u'BLUE', 'congruent': 1, 'corrAns': u'right'},
      {'colour': u'yellow', 'word': u'BLUE', 'congruent': 0, 'corrAns': u'up'},
      {'colour': u'yellow', 'word': u'YELLOW', 'congruent': 1, 'corrAns': u'up'},
      {'colour': u'green', 'word': u'YELLOW', 'congruent': 0, 'corrAns': u'down'},
      {'colour': u'red', 'word': u'YELLOW', 'congruent': 0, 'corrAns': u'left'},
      {'colour': u'blue', 'word': u'YELLOW', 'congruent': 0, 'corrAns': u'right'},
      {'colour': u'yellow', 'word': u'GREEN', 'congruent': 0, 'corrAns': u'up'},
      {'colour': u'blue', 'word': u'GREEN', 'congruent': 0, 'corrAns': u'right'},
      {'colour': u'green', 'word': u'GREEN', 'congruent': 1, 'corrAns': u'down'},
      {'colour': u'red', 'word': u'GREEN', 'congruent': 0, 'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
